PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = delay_discounting
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today" + " or" + " GBP " + str(future_reward) + " after " + str(delay) + " days" 
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = discounting.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 11, 'future_reward': 30, 'delay': 7},
      {'reward_today': 15, 'future_reward': 35, 'delay': 13},
      {'reward_today': 27, 'future_reward': 50, 'delay': 21},
      {'reward_today': 40, 'future_reward': 55, 'delay': 62},
      {'reward_today': 49, 'future_reward': 60, 'delay': 89},
      {'reward_today': 67, 'future_reward': 75, 'delay': 119},
      {'reward_today': 78, 'future_reward': 80, 'delay': 162},
      {'reward_today': 88, 'future_reward': 89, 'delay': 174},
      {'reward_today': 98, 'future_reward': 99, 'delay': 201},
      {'reward_today': 106, 'future_reward': 111, 'delay': 227},
      {'reward_today': 115, 'future_reward': 123, 'delay': 254},
      {'reward_today': 124, 'future_reward': 134, 'delay': 280},
      {'reward_today': 132, 'future_reward': 146, 'delay': 307},
      {'reward_today': 141, 'future_reward': 158, 'delay': 334},
      {'reward_today': 149, 'future_reward': 169, 'delay': 360},
      {'reward_today': 158, 'future_reward': 181, 'delay': 387},
      {'reward_today': 166, 'future_reward': 193, 'delay': 413},
      {'reward_today': 175, 'future_reward': 205, 'delay': 440},
      {'reward_today': 184, 'future_reward': 216, 'delay': 467},
      {'reward_today': 192, 'future_reward': 228, 'delay': 493},
      {'reward_today': 201, 'future_reward': 240, 'delay': 520},
      {'reward_today': 209, 'future_reward': 251, 'delay': 547},
      {'reward_today': 218, 'future_reward': 263, 'delay': 573},
      {'reward_today': 226, 'future_reward': 275, 'delay': 600},
      {'reward_today': 235, 'future_reward': 286, 'delay': 626},
      {'reward_today': 244, 'future_reward': 298, 'delay': 653}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
    Routine trial
  LoopTerminator trials
