PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = word_priming
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'phone'},
      {'study_word': 'marble'},
      {'study_word': 'board'},
      {'study_word': 'chart'},
      {'study_word': 'mouse'},
      {'study_word': 'pastry'},
      {'study_word': 'case'},
      {'study_word': 'police'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test': 'l_pt_p'},
      {'test': 't_g_r'},
      {'test': '_oo_'},
      {'test': '_ha_t'},
      {'test': 'c_s_io_'},
      {'test': 'c_s_'},
      {'test': 'c_m_r_'},
      {'test': 'p_nc_l'},
      {'test': '_o_s_'},
      {'test': 'p_as_tr_'},
      {'test': 'b_o_s_'},
      {'test': 'p_l_c_'},
      {'test': '_ho_e_'},
      {'test': 'v_s_'},
      {'test': 'bo_t_e'},
      {'test': '_ru_is_'}]
    Routine test
  LoopTerminator trials_2
